CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9])-(?P<FOV>[0-9])_(?P<channel>(TRANS|[0-9]{3}))
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(masks)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Width:  154.9031 µm (1540)', 'Height:  154.6013 µm (1537)', 'depth: variable at 1 µm spacing', 'Resolution:  9.9417 pixels per µm', 'Pixel size: 0.1006x0.1006 µm^2', 'Magnification: 0.50']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:10.0
    Select the rule criteria:and (file does contain "405")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "555")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "640")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuclei_masks")
    Name to assign these images:nuclei_mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "cell_masks")
    Name to assign these images:cell_mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:FOV

MeasureObjectIntensity:[module_num:5|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:RunCellpose

MeasureObjectSizeShape:[module_num:6|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enabled:False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
    Select object sets to measure:RunCellpose
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:7|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:RunCellpose
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ConvertImageToObjects:[module_num:8|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enabled:False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
    Select the input image:nuclei_mask
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureImageOverlap:[module_num:9|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enabled:False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
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

ConvertImageToObjects:[module_num:10|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
    Select the input image:nuclei_mask
    Name the output object:Nuclei
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:11|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
    Select the input image:cell_mask
    Name the output object:Cells
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Watershed:[module_num:12|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
    Select the input image:cell_mask
    Name the output object:Watershed
    Use advanced settings?:Yes
    Generate from:Markers
    Markers:nuclei_mask
    Mask:cell_mask
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:Yes
    Declump method:Shape
    Reference Image:AGP
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:4
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:ball,4

MaskImage:[module_num:13|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enabled:False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
    Select the input image:cell_mask
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:ConvertImageToObjects
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    Invert the mask?:No

Threshold:[module_num:14|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enabled:False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
    Select the input image:nuclei_mask
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

Threshold:[module_num:15|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enabled:False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
    Select the input image:cell_mask
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertImageToObjects:[module_num:16|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enabled:False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
    Select the input image:cell_mask
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

Threshold:[module_num:17|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enabled:False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
    Select the input image:mask
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ConvertImageToObjects:[module_num:18|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enabled:False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
    Select the input image:Threshold
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectIntensity:[module_num:19|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:Watershed
